// "StartupMacros"
// The macros and macro tools in this file ("StartupMacros.txt") are
// automatically installed in the Plugins>Macros submenu and
//  in the tool bar when ImageJ starts up.

//  About the drawing tools.
//
//  This is a set of drawing tools similar to the pencil, paintbrush,
//  eraser and flood fill (paint bucket) tools in NIH Image. The
//  pencil and paintbrush draw in the current foreground color
//  and the eraser draws in the current background color. The
//  flood fill tool fills the selected area using the foreground color.
//  Hold down the alt key to have the pencil and paintbrush draw
//  using the background color or to have the flood fill tool fill
//  using the background color. Set the foreground and background
//  colors by double-clicking on the flood fill tool or on the eye
//  dropper tool.  Double-click on the pencil, paintbrush or eraser
//  tool  to set the drawing width for that tool.
//
// Icons contributed by Tony Collins.

// Global variables
var pencilWidth=1,  eraserWidth=10, leftClick=16, alt=8;
var brushWidth = 10; //call("ij.Prefs.get", "startup.brush", "10");
var floodType =  "8-connected"; //call("ij.Prefs.get", "startup.flood", "8-connected");

// The macro named "AutoRunAndHide" runs when ImageJ starts
// and the file containing it is not displayed when ImageJ opens it.

// macro "AutoRunAndHide" {}

function UseHEFT {
	requires("1.38f");
	state = call("ij.io.Opener.getOpenUsingPlugins");
	if (state=="false") {
		setOption("OpenUsingPlugins", true);
		showStatus("TRUE (images opened by HandleExtraFileTypes)");
	} else {
		setOption("OpenUsingPlugins", false);
		showStatus("FALSE (images opened by ImageJ)");
	}
}

UseHEFT();

// The macro named "AutoRun" runs when ImageJ starts.

macro "AutoRun" {
	// run all the .ijm scripts provided in macros/AutoRun/
	autoRunDirectory = getDirectory("imagej") + "/macros/AutoRun/";
	if (File.isDirectory(autoRunDirectory)) {
		list = getFileList(autoRunDirectory);
		// make sure startup order is consistent
		Array.sort(list);
		for (i = 0; i < list.length; i++) {
			if (endsWith(list[i], ".ijm")) {
				runMacro(autoRunDirectory + list[i]);
			}
		}
	}
}

var pmCmds = newMenu("Popup Menu",
	newArray("Help...", "Rename...", "Duplicate...", "Original Scale",
	"Paste Control...", "-", "Record...", "Capture Screen ", "Monitor Memory...",
	"Find Commands...", "Control Panel...", "Startup Macros...", "Search..."));

macro "Popup Menu" {
	cmd = getArgument();
	if (cmd=="Help...")
		showMessage("About Popup Menu",
			"To customize this menu, edit the line that starts with\n\"var pmCmds\" in ImageJ/macros/StartupMacros.txt.");
	else
		run(cmd);
}

macro "Abort Macro or Plugin (or press Esc key) Action Tool - CbooP51b1f5fbbf5f1b15510T5c10X" {
	setKeyDown("Esc");
}

var xx = requires138b(); // check version at install
function requires138b() {requires("1.38b"); return 0; }

var dCmds = newMenu("Developer Menu Tool",
newArray("ImageJ Website","News", "Documentation", "ImageJ Wiki", "Resources", "Macro Language", "Macros",
	"Macro Functions", "Startup Macros...", "Plugins", "Source Code", "Mailing List Archives", "-", "Record...",
	"Capture Screen ", "Monitor Memory...", "List Commands...", "Control Panel...", "Search...", "Debug Mode"));

macro "Developer Menu Tool - C037T0b11DT7b09eTcb09v" {
	cmd = getArgument();
	if (cmd=="ImageJ Website")
		run("URL...", "url=http://rsbweb.nih.gov/ij/");
	else if (cmd=="News")
		run("URL...", "url=http://rsbweb.nih.gov/ij/notes.html");
	else if (cmd=="Documentation")
		run("URL...", "url=http://rsbweb.nih.gov/ij/docs/");
	else if (cmd=="ImageJ Wiki")
		run("URL...", "url=http://imagejdocu.tudor.lu/imagej-documentation-wiki/");
	else if (cmd=="Resources")
		run("URL...", "url=http://rsbweb.nih.gov/ij/developer/");
	else if (cmd=="Macro Language")
		run("URL...", "url=http://rsbweb.nih.gov/ij/developer/macro/macros.html");
	else if (cmd=="Macros")
		run("URL...", "url=http://rsbweb.nih.gov/ij/macros/");
	else if (cmd=="Macro Functions")
		run("URL...", "url=http://rsbweb.nih.gov/ij/developer/macro/functions.html");
	else if (cmd=="Plugins")
		run("URL...", "url=http://rsbweb.nih.gov/ij/plugins/");
	else if (cmd=="Source Code")
		run("URL...", "url=http://rsbweb.nih.gov/ij/developer/source/");
	else if (cmd=="Mailing List Archives")
		run("URL...", "url=https://list.nih.gov/archives/imagej.html");
	else if (cmd=="Debug Mode")
		setOption("DebugMode", true);
	else if (cmd!="-")
		run(cmd);
}

var sCmds = newMenu("Stacks Menu Tool",
	newArray("Add Slice", "Delete Slice", "Next Slice [>]", "Previous Slice [<]", "Set Slice...", "-",
		"Convert Images to Stack", "Convert Stack to Images", "Make Montage...", "Reslice [/]...", "Z Project...",
		"3D Project...", "Plot Z-axis Profile", "-", "Start Animation", "Stop Animation", "Animation Options...",
		"-", "MRI Stack (528K)"));
macro "Stacks Menu Tool - C037T0b11ST8b09tTcb09k" {
	cmd = getArgument();
	if (cmd!="-") run(cmd);
}

var luts = getLutMenu();
var lCmds = newMenu("LUT Menu Tool", luts);
macro "LUT Menu Tool - C037T0b11LT6b09UTcb09T" {
	cmd = getArgument();
	if (cmd!="-") run(cmd);
}
function getLutMenu() {
	list = getLutList();
	menu = newArray(16+list.length);
	menu[0] = "Invert LUT"; menu[1] = "Apply LUT"; menu[2] = "-";
	menu[3] = "Fire"; menu[4] = "Grays"; menu[5] = "Ice";
	menu[6] = "Spectrum"; menu[7] = "3-3-2 RGB"; menu[8] = "Red";
	menu[9] = "Green"; menu[10] = "Blue"; menu[11] = "Cyan";
	menu[12] = "Magenta"; menu[13] = "Yellow"; menu[14] = "Red/Green";
	menu[15] = "-";
	for (i=0; i<list.length; i++)
		menu[i+16] = list[i];
	return menu;
}

function getLutList() {
	lutdir = getDirectory("luts");
	list = newArray("No LUTs in /ImageJ/luts");
	if (!File.exists(lutdir))
		return list;
	rawlist = getFileList(lutdir);
	if (rawlist.length==0)
		return list;
	count = 0;
	for (i=0; i< rawlist.length; i++)
		if (endsWith(rawlist[i], ".lut")) count++;
	if (count==0)
		return list;
	list = newArray(count);
	index = 0;
	for (i=0; i< rawlist.length; i++) {
		if (endsWith(rawlist[i], ".lut"))
			list[index++] = substring(rawlist[i], 0, lengthOf(rawlist[i])-4);
	}
	return list;
}

macro "Pencil Tool - C037L494fL4990L90b0Lc1c3L82a4Lb58bL7c4fDb4L5a5dL6b6cD7b" {
	getCursorLoc(x, y, z, flags);
	if (flags&alt!=0)
		setColorToBackgound();
	draw(pencilWidth);
}

macro "Paintbrush Tool - C037La077Ld098L6859L4a2fL2f4fL3f99L5e9bL9b98L6888L5e8dL888c" {
	getCursorLoc(x, y, z, flags);
	if (flags&alt!=0)
		setColorToBackgound();
	draw(brushWidth);
}

macro "Flood Fill Tool -C037B21P085373b75d0L4d1aL3135L4050L6166D57D77D68La5adLb6bcD09D94" {
	requires("1.34j");
	setupUndo();
	getCursorLoc(x, y, z, flags);
	if (flags&alt!=0) setColorToBackgound();
	floodFill(x, y, floodType);
}

function draw(width) {
	requires("1.32g");
	setupUndo();
	getCursorLoc(x, y, z, flags);
	setLineWidth(width);
	moveTo(x,y);
	x2=-1; y2=-1;
	while (true) {
		getCursorLoc(x, y, z, flags);
		if (flags&leftClick==0) exit();
		if (x!=x2 || y!=y2)
			lineTo(x,y);
		x2=x; y2 =y;
		wait(10);
	}
}

function setColorToBackgound() {
	savep = getPixel(0, 0);
	makeRectangle(0, 0, 1, 1);
	run("Clear");
	background = getPixel(0, 0);
	run("Select None");
	setPixel(0, 0, savep);
	setColor(background);
}

// Runs when the user double-clicks on the pencil tool icon
macro 'Pencil Tool Options...' {
	pencilWidth = getNumber("Pencil Width (pixels):", pencilWidth);
}

// Runs when the user double-clicks on the paint brush tool icon
macro 'Paintbrush Tool Options...' {
	brushWidth = getNumber("Brush Width (pixels):", brushWidth);
	call("ij.Prefs.set", "startup.brush", brushWidth);
}

// Runs when the user double-clicks on the flood fill tool icon
macro 'Flood Fill Tool Options...' {
	Dialog.create("Flood Fill Tool");
	Dialog.addChoice("Flood Type:", newArray("4-connected", "8-connected"), floodType);
	Dialog.show();
	floodType = Dialog.getChoice();
	call("ij.Prefs.set", "startup.flood", floodType);
}

macro "Set Drawing Color..."{
	run("Color Picker...");
}

macro "-" {} //menu divider

macro "About Startup Macros..." {
	title = "About Startup Macros";
	text = "Macros, such as this one, contained in a file named\n"
		+ "'StartupMacros.txt', located in the 'macros' folder inside the\n"
		+ "Fiji folder, are automatically installed in the Plugins>Macros\n"
		+ "menu when Fiji starts.\n"
		+ "\n"
		+ "More information is available at:\n"
		+ "<http://imagej.nih.gov/ij/developer/macro/macros.html>";
	dummy = call("fiji.FijiTools.openEditor", title, text);
}

macro "Save As JPEG... [j]" {
	quality = call("ij.plugin.JpegWriter.getQuality");
	quality = getNumber("JPEG quality (0-100):", quality);
	run("Input/Output...", "jpeg="+quality);
	saveAs("Jpeg");
}

macro "Save Inverted FITS" {
	run("Flip Vertically");
	run("FITS...", "");
	run("Flip Vertically");
}

macro "Save as TIFF and PNG [s]" {
    // Get the current image title
    title = getTitle();
    
    // This line set the directory to the current image location
    saveDir = getDirectory("image");
    
    
    // This line set the save directory (modify this to your desired folder)
    if(saveDir == ''){
    	saveDir = getDirectory("save to...");
    }



    // Save the current image as TIFF
    saveAs("Tiff", saveDir + title);

    // Save the current image as PNG
    saveAs("PNG", saveDir + title);
    
    showMessage("Save Successful to: ", saveDir);

}

macro "redox_splitter" {
	// SplitRedoxChannels_SameFolder.ijm
	// Pick one folder; all "*redox*.oir" files there will be split
	// and the TIFFs written back into the same folder.
	
	dir = getDirectory("Choose folder containing your .oir files");
	list = getFileList(dir);
	
	for (i = 0; i < list.length; i++) {
	    name    = list[i];
	    nameLow = toLowerCase(name);
	    if (endsWith(nameLow, ".oir") && indexOf(nameLow, "redox") >= 0) {
	        path = dir + name;
	        
        	run("Bio-Formats Importer", 
            "open=[" + path + "] autoscale color_mode=Default view=Hyperstack " +
            "stack_order=XYCZT");
            
	        title = getTitle();
	
	        // split into C1-title and C2-title
	        run("Split Channels");
	
	        // save channel 1 as basename_fad.tif
	        selectWindow("C1-" + title);
	        saveAs("Tiff", dir
	            + substring(name, 0, 1)
	            + "-fad.tif");
	
	        // save channel 2 as basename_nadh.tif
	        selectWindow("C2-" + title);
	        saveAs("Tiff", dir
	            + substring(name, 0, 1)
	            + "-nadh.tif");
	
	        run("Close All");
    }
}

}

macro "Open and Subtract 845" {
		// Step 1: Define wavelengths to subtract from the background wavelength
	subtract_wavelengths = newArray("841.0nm", "843.0nm", "845.0nm"); // Add more wavelengths here as needed
	background_wavelength = "862.0nm";  // Modify this as needed

	// Step 2: Prompt the user to select a folder
	dir = getDirectory("Choose a Directory, the folder where your images are");

	// Step 3: Get the list of files in the selected folder
	fileList = getFileList(dir);


	// Arrays to store matched images and subtracted ones
	roi_background_images = newArray();
	roi_other_images = newArray();
	other_wavelengths = newArray();
	subtracted_images = newArray();  // Track images involved in subtraction

	// Step 5: Sort images by wavelength (background and other wavelengths)
	for (i = 0; i < fileList.length; i++) {
		filename = fileList[i];
		
		// skip all the tif files existed
		if (indexOf(filename, ".tif") >= 0 || indexOf(filename, "redox") >= 0) {
			continue;
		}
		// Split the image name using "-"
		split_name = split(filename, "-");
		if (split_name.length < 3) {
		    continue;
		}
		if(split_name[1].length > 7) {
			continue;
		}
		// Extract ROI number and wavelength
		roi = split_name[0];   // ROI number (first part)
		wavelength = split_name[1];   // Wavelength (second part)
		// print(roi, wavelength);

	// YKW, arrays.contains does not work, and idk why
		for (j = 0; j < subtract_wavelengths.length; j++) {
			if (subtract_wavelengths[j] == wavelength) {
				roi_other_images = Array.concat(roi_other_images, filename);
				other_wavelengths = Array.concat(other_wavelengths, wavelength);  // Track for naming results
			}
		}
		if (wavelength == background_wavelength) {
			roi_background_images = Array.concat(roi_background_images, filename);
		} 
	}
	// ------------------------------------------------
	// Function to convert array to a string
	function arrayToString(array) {
		str = "";
		for (i = 0; i < array.length; i++) {
			str += array[i];
			if (i < array.length - 1) {
				str += ", "; // Add comma separator
			}
		}
		return str;
	}

	// Convert arrays to strings for printing
	roi_background_images_str = arrayToString(roi_background_images);

	// Print the arrays
	print("Background images: " + roi_background_images_str);
	print("Subtracting images: ");

	// -----------------------------------------------------


	// Step 6: Perform subtraction for corresponding ROIs and wavelengths
for (i = 0; i < roi_other_images.length; i++) {
    roi_other_name = roi_other_images[i];
    print(roi_other_name);
    split_name = split(roi_other_name, "-");  // Extract ROI number
    roi = split_name[0];
    // Find the corresponding background wavelength image with the same ROI
    for (j = 0; j < roi_background_images.length; j++) {
        roi_background_name = roi_background_images[j];
        
        // Match by ROI (first part of the name)
        if (startsWith(roi_background_name, roi)) {
            // Open both images for subtraction
            // open(dir + roi_other_name);
            // open(dir + roi_background_name);
            run("Bio-Formats Importer", "open=[" + dir + roi_other_name + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
            applyLUT(split_name[1]);

            run("Bio-Formats Importer", "open=[" + dir + roi_background_name + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");


            // Subtract background image from other wavelength image
            run("Image Calculator...", "operation=Subtract image1=[" + roi_other_name + "] image2=[" + roi_background_name + "] create");

            // Track subtracted images to avoid reopening
            subtracted_images = Array.concat(subtracted_images, roi_other_name);

            // Close the original images
            close(roi_other_name);
            close(roi_background_name);
        }

    }

}
subtracted_images = Array.concat(subtracted_images, roi_background_images);

print("subtracted_images:" + arrayToString(subtracted_images));

// Define your LUT mappings
lut_mappings = newArray(
    "791.3nm=Red", 
    "794.6nm=Cyan", 
    "797.2nm=Green", 
    "787.2nm=Yellow", 
    "841.0nm=Magenta", 
    "843.0nm=Cyan Hot", 
    "845.0nm=Fire"
);

// Function to apply LUT based on wavelength
function applyLUT(wavelength) {
    if (wavelength == "791.3nm") {
        run("Red");
    } else if (wavelength == "794.6nm") {
        run("Cyan");
    } else if (wavelength == "797.2nm") {
        run("Green");
    } else if (wavelength == "787.2nm") {
        run("Yellow");
    } else if (wavelength == "841.0nm") {
        run("Magenta");
    } else if (wavelength == "843.0nm") {
        run("Cyan Hot");
    } else if (wavelength == "845.0nm") {
        run("Fire");
    }
}

// Step 7: Open all images that were not involved in subtraction
for (i = 0; i < fileList.length; i++) {
    filename = fileList[i];
    
    if (indexOf(filename, ".tif") >= 0 || indexOf(filename, "redox") >= 0) {
			continue;
		}
		
	// Split the image name using "-"
	split_name = split(filename, "-");
	
	if (split_name.length < 3) {
		    continue;
		}
    
    wavelength = split_name[1];   // Extract wavelength from filename

    // Check if the image was involved in subtraction
    for (j = 0; j < subtracted_images.length; j++) {
        if ((filename == subtracted_images[j])) {
            j = subtracted_images.length;
        }

        if(j == (subtracted_images.length - 1)) {
            run("Bio-Formats Importer", "open=[" + dir + filename + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
            
            // Apply the LUT based on the wavelength
            applyLUT(wavelength);
        }
    }
}

macro "Open and Subtract 844.6" {
		// Step 1: Define wavelengths to subtract from the background wavelength
	subtract_wavelengths = newArray("841.8nm", "844.6nm"); // Add more wavelengths here as needed
	background_wavelength = "862.0nm";  // Modify this as needed

	// Step 2: Prompt the user to select a folder
	dir = getDirectory("Choose a Directory, the folder where your images are");

	// Step 3: Get the list of files in the selected folder
	fileList = getFileList(dir);


	// Arrays to store matched images and subtracted ones
	roi_background_images = newArray();
	roi_other_images = newArray();
	other_wavelengths = newArray();
	subtracted_images = newArray();  // Track images involved in subtraction

	// Step 5: Sort images by wavelength (background and other wavelengths)
	for (i = 0; i < fileList.length; i++) {
		filename = fileList[i];

		// skip all the tif files existed
		if (indexOf(filename, ".tif") >= 0 || indexOf(filename, "redox") >= 0) {
			continue;
		}
		
		// Split the image name using "-"
		split_name = split(filename, "-");
		if (split_name.length < 3) {
		    continue;
		}
		if(split_name[1].length > 7) {
			continue;
		}
		// Extract ROI number and wavelength
		roi = split_name[0];   // ROI number (first part)
		wavelength = split_name[1];   // Wavelength (second part)
		// print(roi, wavelength);

	// YKW, arrays.contains does not work, and idk why
		for (j = 0; j < subtract_wavelengths.length; j++) {
			if (subtract_wavelengths[j] == wavelength) {
				roi_other_images = Array.concat(roi_other_images, filename);
				other_wavelengths = Array.concat(other_wavelengths, wavelength);  // Track for naming results
			}
		}
		if (wavelength == background_wavelength) {
			roi_background_images = Array.concat(roi_background_images, filename);
		} 
	}
	// ------------------------------------------------
	// Function to convert array to a string
	function arrayToString(array) {
		str = "";
		for (i = 0; i < array.length; i++) {
			str += array[i];
			if (i < array.length - 1) {
				str += ", "; // Add comma separator
			}
		}
		return str;
	}

	// Convert arrays to strings for printing
	roi_background_images_str = arrayToString(roi_background_images);

	// Print the arrays
	print("Background images: " + roi_background_images_str);
	print("Subtracting images: ");

	// -----------------------------------------------------


	// Step 6: Perform subtraction for corresponding ROIs and wavelengths
for (i = 0; i < roi_other_images.length; i++) {
    roi_other_name = roi_other_images[i];
    print(roi_other_name);
    split_name = split(roi_other_name, "-");  // Extract ROI number
    roi = split_name[0];
    // Find the corresponding background wavelength image with the same ROI
    for (j = 0; j < roi_background_images.length; j++) {
        roi_background_name = roi_background_images[j];
        
        // Match by ROI (first part of the name)
        if (startsWith(roi_background_name, roi)) {
            // Open both images for subtraction
            // open(dir + roi_other_name);
            // open(dir + roi_background_name);
            run("Bio-Formats Importer", "open=[" + dir + roi_other_name + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
            applyLUT(split_name[1]);

            run("Bio-Formats Importer", "open=[" + dir + roi_background_name + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");


            // Subtract background image from other wavelength image
            run("Image Calculator...", "operation=Subtract image1=[" + roi_other_name + "] image2=[" + roi_background_name + "] create");

            // Track subtracted images to avoid reopening
            subtracted_images = Array.concat(subtracted_images, roi_other_name);

            // Close the original images
            close(roi_other_name);
            close(roi_background_name);
        }

    }

}
subtracted_images = Array.concat(subtracted_images, roi_background_images);

print("subtracted_images:" + arrayToString(subtracted_images));

// Define your LUT mappings
lut_mappings = newArray(
    "791.3nm=Red", 
    "794.6nm=Cyan", 
    "797.2nm=Green", 
    "787.2nm=Yellow", 
    "841.8nm=Magenta", 
    "844.6nm=Cyan Hot"
);

// Function to apply LUT based on wavelength
function applyLUT(wavelength) {
    if (wavelength == "791.3nm") {
        run("Red");
    } else if (wavelength == "794.6nm") {
        run("Cyan");
    } else if (wavelength == "797.2nm") {
        run("Green");
    } else if (wavelength == "787.2nm") {
        run("Yellow");
    } else if (wavelength == "841.8nm") {
        run("Magenta");
    } else if (wavelength == "844.6nm") {
        run("Cyan Hot");
    }
}

// Step 7: Open all images that were not involved in subtraction
for (i = 0; i < fileList.length; i++) {
    filename = fileList[i];
    
    if (indexOf(filename, ".tif") >= 0 || indexOf(filename, "redox") >= 0) {
			continue;
		}
		
	// Split the image name using "-"
	split_name = split(filename, "-");
	
	if (split_name.length < 3) {
		    continue;
		}
		
    wavelength = split_name[1];   // Extract wavelength from filename

    // Check if the image was involved in subtraction
    for (j = 0; j < subtracted_images.length; j++) {
        if ((filename == subtracted_images[j])) {
            j = subtracted_images.length;
        }

        if(j == (subtracted_images.length - 1)) {
            run("Bio-Formats Importer", "open=[" + dir + filename + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
            
            // Apply the LUT based on the wavelength
            applyLUT(wavelength);
        }
    }
}

macro "masked CD mean png tiff" {
	// ImageJ Macro: batch‐apply LUT, measure mean, then allow contrast tweak & save
	
	// 1) choose folder
	dir = getDirectory("Choose a Directory");
	list = getFileList(dir);
	
	// 2) clear any old results
	run("Clear Results");
	
	for (i = 0; i < list.length; i++) {
	    file = list[i];
	    if (!endsWith(file, "-masked.tif")) continue;
	    
	    // 3) open via Bio-Formats
	    run("Bio-Formats Importer", 
	        "open=[" + dir + file + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
	    
	    // 4) grab the real window title
	    title = getTitle();  
	    
	    // 5) apply the right LUT
	    if (indexOf(title, "841.8nm") != -1) {
	        run("Magenta");
	    } else if (indexOf(title, "844.6nm") != -1) {
	        run("Cyan Hot");
	    } else if (indexOf(title, "841.0nm") != -1) {
	        run("Magenta");
	    } else if (indexOf(title, "845.0nm") != -1) {
	        run("Cyan Hot");
	    }
	    
	    // 6) measure mean intensity
	    run("Set Measurements...", "mean redirect=None decimal=3");
	    run("Measure");
	    
	    // 7) let you adjust contrast
	    run("Brightness/Contrast...");
	    waitForUser("Adjust contrast for " + title + " then click OK");
	
	    // 8) build a base filename (strip “.tif”)
	    base = replace(title, ".tif", "");
	    
	    // 9) save as TIFF and PNG with “-lut” suffix
	    saveAs("Tiff", dir + base + ".tif");
	    run("Smooth");
	    saveAs("PNG",  dir + base + ".png");
	    
	    // 10) close and loop
	    close();
}
